/*takes a stiched Lioheart image of RFP channel, opens it, finds the sytox-orange nuclei, counts them and saves the masks and results-table
 * Sarah Schweighofer, Dec 2021
*/


// choose source directory
filepath = getDirectory("Choose_Source_Directory "); //gets saved as dictionnary
filelist = getFileList(filepath);

// savepath = getDirectory("Choose_Destination_Directory ");

for (i = 0; i < filelist.length; i++) {
	filename = filelist [i];
	
	//if you find your_string anywhere in the filename - user can change this to any string wanted
	your_string = ".*DAPI.*";
	if (matches(filename, your_string)) {	
		file = filepath + "/" + filename;
		open(file);
		title = getTitle();
		print(title);
		
		
		
		//adjust brightness
		// setMinAndMax(0, 15000); 4600-15000
//		waitForUser;
//		run("Apply LUT");
		
		//run rolling ball background subtraction
		run("Subtract Background...", "rolling=0.2 sliding");
		
		//run Gaussian blur
		run("Gaussian Blur...", "sigma=2");		
		

//		//adjust brightness
//		waitForUser;
//		setMinAndMax(0, 15000);
//		waitForUser;
		
		//run an Otsu threshold with dark background and no range reset
		setAutoThreshold("Otsu dark no-reset");
		run("Convert to Mask");

		run("Erode");
		run("Watershed");
		
		run("Analyze Particles...", "  show=Masks display clear include summarize add in_situ");

		saveAs("Tiff", file + "_mask.tiff");
		
		close ("*");
		
		//close the table
		selectWindow("Results"); 
	   	run("Close" );
	   	//clear the ROI manager
		selectWindow("ROI Manager");
		run("Close" );
	}		
}
Table.save(filepath + "Summary_DAPI.csv","Summary");	